PsychoPy2experiment version="2024.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = first_experiment
  eyetracker = Tobii Technology
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
  tbSampleRate = 60
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Routines
  Routine trial
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    EyetrackerRecordComponent etRecord
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      syncScreenRefresh = False
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = dkl
    expandDur = 1
    expandScale = 1.5
    fillColor = 0.7725, -0.6549, -0.2784
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = -0.2784, -0.6549, -0.2784
    units = from exp settings
  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = True
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
Flow
  EyetrackerCalibrationRoutine calibration
  EyetrackerValidationRoutine validation
  Routine trial
